Journal
Description: This journal performs many things see below
  probably not needed... delete this journal soon
  (3/6/20)
Version VersionNumber=2.4


Comment: Use ZDC to get Z-offset value
Start Continuous Focusing
  m_dpRange = 1000
Disabled Start Continuous Focusing
  m_dpRange = 200
Stop Continuous Focusing
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+focusOffset
Disabled Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos

Comment: Store the Z-position in the list so that we can save it later
Disabled NewStageLabel = AFStageLabel
Disabled Memorize Absolute Position
  stDescription = "##ERROR##" Override=Variable OverrideVariable=NewStageLabel
  nThisCategory = 1


