Journal
Description: Assign variables directly instead of prompts. These values don't change often, if ever.
Version VersionNumber=2.4
Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "D:\Neuronal_Culture_DataMM" Override=None OverrideVariable=Select Directory
IfThenElse Expression=SelectDirectory.Success = 1
  CodeBlock Condition=true
    StreamSavePath = SelectDirectory.Path
  CodeBlock Condition=false
    StreamSavePath = MDA.Path

Enter Variable
  stVariableName = "Plate_Name"
  nDialogType = 4
  stDialogTitle = "Plate Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Plate Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1
IfThenElse Expression=Len(Plate_Name) = 0
  CodeBlock Condition=true
    ExitPlayback

Disabled Enter Variable
  stVariableName = "Construct"
  nDialogType = 4
  stDialogTitle = "Construct Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Construct Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1
Disabled IfThenElse Expression=Len(Construct) = 0
  CodeBlock Condition=true
    Disabled ExitPlayback

Solution = "NGHKCM-1"
Disabled Enter Variable
  stVariableName = "Solution"
  nDialogType = 6
  stDialogTitle = "Imaging Solution"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Imaging Solution Type"
  stDialogList = "NGHKCM-1\nCTXlowK1\nCTXnew2\nCTXnew3"
  bReturnText = TRUE
  xMessageBox = 2759
  yMessageBox = 537
Disabled IfThenElse Expression=Len(Solution) = 0
  CodeBlock Condition=true
    Disabled ExitPlayback

Drug_Mix = "CNQXCPPGABAZINEMCPG"
Disabled Enter Variable
  stVariableName = "Drug_Mix"
  nDialogType = 6
  stDialogTitle = "Drug_Mix"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Drug Mix"
  stDialogList = "CNQXCPPGABAZINEMCPG\nOther\nReplacement"
  bReturnText = TRUE
  xMessageBox = -1
  yMessageBox = -1
Disabled IfThenElse Expression=Len(Drug_Mix) = 0
  CodeBlock Condition=true
    Disabled ExitPlayback

Volume = "500ul"
Disabled Enter Variable
  stVariableName = "Volume"
  nDialogType = 6
  stDialogTitle = "Volume of Solution"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Volume of Solution"
  stDialogList = "500ul\n400ul\n350ul\n300ul\n250ul\n50ul"
  bReturnText = TRUE
  xMessageBox = -1
  yMessageBox = -1
Disabled IfThenElse Expression=Len(Volume) = 0
  CodeBlock Condition=true
    Disabled ExitPlayback

Stim_Volts = "40V"
Disabled Enter Variable
  stVariableName = "Stim_Volts"
  nDialogType = 6
  stDialogTitle = "Voltage setting of Stimulator"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Voltage setting of Stimulator"
  stDialogList = "50V\n40V\n80V\n100V"
  bReturnText = TRUE
  xMessageBox = -1
  yMessageBox = -1
Disabled IfThenElse Expression=Len(Stim_Volts) = 0
  CodeBlock Condition=true
    Disabled ExitPlayback

LED_Setting = "blueLED15"
Disabled Enter Variable
  stVariableName = "LED_Setting"
  nDialogType = 6
  stDialogTitle = "LED brightness setting"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter LED brightness setting"
  stDialogList = "blueLED15\nblueLED30\nblueLED45"
  bReturnText = TRUE
  xMessageBox = -1
  yMessageBox = -1
Disabled IfThenElse Expression=Len(LED_Setting) = 0
  CodeBlock Condition=true
    Disabled ExitPlayback

Trial_No = "t1"
Disabled Enter Variable
  stVariableName = "Trial_No"
  nDialogType = 6
  stDialogTitle = "Trial_No"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Trial_No"
  stDialogList = "t1\nt2\nt3"
  bReturnText = TRUE
  xMessageBox = -1
  yMessageBox = -1
Disabled IfThenElse Expression=Len(Trial_No) = 0
  CodeBlock Condition=true
    Disabled ExitPlayback

