Journal
Description: Acquisition journal for GCaMP screen
  Called by GECI-main MDA
  was previously "Acquisition 96well GFP Andor 10secISI.JNL"
Version VersionNumber=2.4

Comment: Lower actuator
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\Actuator Down.jnl"

Comment: SETUP ILLUMINATION AND ACQUIRE SETTINGS for FOCUSING
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-TxRed-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-TxRed"

CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName


Comment: Use ZDC to get Z-offset value
Start Continuous Focusing
  m_dpRange = 1000
Stop Continuous Focusing
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+focusOffset

Comment: Store the Z-position in the list so that we can save it later
NewStageLabel = AFStageLabel + "new"
Memorize Absolute Position
  stDescription = "##ERROR##" Override=Variable OverrideVariable=NewStageLabel
  nThisCategory = 1

Comment: Setup Filename information and then collect a TxRed image stream
Disabled Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = "NoStim"
Disabled Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\GECI-red.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "AxSi-Red"
Disabled Configure Stream Acquisition
  nStreamFrames = 10
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 7 9 0 1 12 0 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 7 9 0 1 12 0 8 Untitled
  bSaveIt = FALSE
Disabled Delay
  dpDelayTime = 1
  nDelayUnits = 2


Comment: Here we collect a Reference image
Trace Expression="ref image"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "AxSi-Red"
Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\axonalsilencing\GECI-focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
ImageName = StreamSavePath + "\" + "RefImage   "+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition)  + ".tif"
Image.FilePath = ImageName
Save
  imSave = m 1 7 9 0 1 19 0 8 Untitled
  nParm = 0
Close
  im = m 1 7 9 0 1 19 0 8 Untitled
  bSaveIt = FALSE

Comment: Collect sequential streams
Trace Expression="begin acquisition stream journal"
CurrentVoltageName = "020FP@83Hz"
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\axonalsilencing\GECI-main-trig.jnl"
Delay
  dpDelayTime = 4
  nDelayUnits = 2


Comment: Raise actuator
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\Actuator Up.jnl"


