Journal
Description: Single Stream Analog GFP and no Delay (ISI)
  was "Trigger_1400.JNL" and before that "Single stream ana..."
Version VersionNumber=2.4
Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\axonalsilencing\GECI-30Hz-stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "AxSi-Red-Trig"

Comment: Use CURRENT shutter for stream (set above)
Comment: at 206Hz (0.01ms exposure)
  1400 frames = 6.78 seconds
  2064 frames= 10 seconds
  3100 frames=15 seconds
  at 30Hz (33.3ms exposure)
  2700 frames = 90 seconds
Configure Stream Acquisition
  nStreamFrames = 2700
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = FALSE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = TRUE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
Disabled Trace Expression=Device.Illumination.Setting
Disabled Trace Expression=CurrentVoltageName
Disabled Trace Expression=MDA.Status.StagePosName
Disabled Trace Expression=Plate_Name
NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + "sweep_" + STR(sweepnum)
NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 7 9 0 1 4 0 8 Untitled
  nParm = 0
Close
  im = m 1 7 9 0 1 4 0 8 Untitled
  bSaveIt = FALSE


Comment: blue light
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "AxSi-Blue"
Disabled Delay
  dpDelayTime = 2
  nDelayUnits = 2
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "AxSi-Red"
Comment: back to red
Disabled Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\GECI-stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Configure Stream Acquisition
  nStreamFrames = 1032
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = FALSE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = TRUE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_NoStim" + "_" + Device.Illumination.Setting + "_" + "AfterSilenced"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 7 9 0 1 12 0 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 7 9 0 1 12 0 8 Untitled
  bSaveIt = FALSE

Disabled Close
  im = m 1 7 9 0 1 12 0 8 Untitled
  bSaveIt = FALSE

sweepnum = sweepnum+1
