Journal
Description: Main journal file for GCaMP screening as of 3/6/20
  previously "96well-GFP-Andor-10sec.JNL"
  updated/rechecked 2020-11-30
Version VersionNumber=2.4

Comment: Set basic parameters
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Camera / Board
  stDeviceName = "Andor Camera"
  stCameraName = "Andor Camera"
Select Magnification
  stSetting = "10X High NA"
sweepnum = 1

Comment: Raise actuator
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\Actuator Up.jnl"

Comment: User input: save location (replaced Select_Folder.JNL)
Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "D:\Neuronal_Culture_DataMM" Override=None OverrideVariable=Select Directory
StreamSavePath = SelectDirectory.Path
Enter Variable
  stVariableName = "Plate_Name"
  nDialogType = 4
  stDialogTitle = "Plate Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Plate Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1

Comment: User input: focus offset
Assign Variable Interactive
  focusOffset = 116

Comment: User input: stage positions
Load Memory List
  stFilename = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG"
MDA - Load Stage List Interactive
  stFileName = "D:\MetaMorph\DATA\StagePositionsAligned.STG"

Comment: Load MDA
MDA - Load State
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\axonalsilencing\GECI-main.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled

