Journal
Description: Single Stream Analog GFP and no Delay (ISI)
Version VersionNumber=2.4
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Stream-GCaMP.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "blueLED15GCaMP"
Comment: Use CURRENT shutter for stream (set above)
Comment: 2017GCAMP96UF 1400 frames
Configure Stream Acquisition
  nStreamFrames = 1400
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = FALSE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = TRUE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" + Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + Trial_No
NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" + Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + "sweep_" + STR(sweepnum)
NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 7 9 0 1 4 0 8 Untitled
  nParm = 0
Close
  im = m 1 7 9 0 1 4 0 8 Untitled
  bSaveIt = FALSE
sweepnum = sweepnum+1
