Journal

Version VersionNumber=2.4
Comment: Acquisition sequence, called by main file, calls trig journal

CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName


Comment: Use ZDC to get Z-offset value
Start Continuous Focusing
  m_dpRange = 1000
Stop Continuous Focusing
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+focusOffset
Trace Expression="focus offset"

Comment: Store the Z-position in the list so that we can save it later
NewStageLabel = AFStageLabel + "new"
Memorize Absolute Position
  stDescription = "##ERROR##" Override=Variable OverrideVariable=NewStageLabel
  nThisCategory = 1
Trace Expression="storing well name as" + NewStageLabel

Comment: run trigger
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GCaMP-Open"
Loop a Journal
  nLoops = 61
  bConfirm = FALSE
  stJournal = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\photobleaching\GECI-pb-trig.JNL"
  bUseInterval = TRUE
  dpInterval = 10
  nIntervalUnits = 2
  bUsePrompt = FALSE
  stPrompt = "How many times do you want to loop the journal?"
  nCurLoop = 0
  lTime = 0
  lLastUpdate = 0
Trace Expression="well complete, setting sweep to zero and moving to next well"
sweepnum = 0
Disabled Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\photobleaching\GECI-pb-trig.jnl"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RefImageGCaMP"

