Journal
Description: Take a reference image, wait 10 seconds, loop until 60 images taken
Version VersionNumber=2.4
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GCaMP-Open"
Trace Expression="starting sweep number:"
Trace Expression=sweepnum
Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\GECI-focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
ImageName = StreamSavePath + "\" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_z_" + STR(Device.Stage.XPosition) + "_x_" + STR(Device.Stage.YPosition) + "_y_"  + "sweep" + STR(sweepnum) + ".tif"
Image.FilePath = ImageName
Save
  imSave = m 1 7 9 0 1 4 0 8 Untitled
  nParm = 0
Close
  im = m 1 7 9 0 1 4 0 8 Untitled
  bSaveIt = FALSE
Disabled Delay
  dpDelayTime = 10
  nDelayUnits = 2
Trace Expression="sweep complete, incrementing...:"
sweepnum = sweepnum+1
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GCaMP-Open"
Disabled Delay
  dpDelayTime = 10
  nDelayUnits = 2
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RefImageGCaMP"
