Journal

Version VersionNumber=2.4
Comment: Main journal to initiate photobleaching screen
  2020-12-03 by Daniel Reep
Comment: Set basic parameters
Trace Expression="initializing now..."
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Camera / Board
  stDeviceName = "Andor Camera"
  stCameraName = "Andor Camera"
Select Magnification
  stSetting = "10X High NA"
sweepnum = 0

Comment: Raise actuator
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\Actuator Up.jnl"

Comment: User input: save location (replaced Select_Folder.JNL)
Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "D:\Neuronal_Culture_DataMM" Override=None OverrideVariable=Select Directory
StreamSavePath = SelectDirectory.Path
Enter Variable
  stVariableName = "Plate_Name"
  nDialogType = 4
  stDialogTitle = "Plate Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Plate Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1
IfThenElse Expression=Len(Plate_Name) = 0
  CodeBlock Condition=true
    ExitPlayback

Comment: User input: focus offset
Assign Variable Interactive
  focusOffset = 152

Comment: User input: stage positions
Load Memory List
  stFilename = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG"
MDA - Load Stage List Interactive
  stFileName = "D:\MetaMorph\DATA\StagePositionsAligned.STG"

Comment: Load MDA
MDA - Load State
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GECI-Screen\photobleaching\GECI-pb.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled

Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "RefImageGCaMP"
Trace Expression="plate complete"
