Journal
Description: Single Stream Analog GFP
Version VersionNumber=2.4
Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GETI-Screen\iGABAsnfr-stream.AST" Override=None OverrideVariable=File Name
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Comment: Use CURRENT shutter for stream (set above)
Disabled Configure Stream Acquisition
  nStreamFrames = 50 Override=Variable OverrideVariable=numFrames
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif" Override=None OverrideVariable=Filename
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = FALSE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Configure Stream Acquisition
  nStreamFrames = 100
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = FALSE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_" + CurrentVoltageName + "_sweep" + STR(sweepNum) + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 7 9 0 1 5 0 8 Untitled
  nParm = 0
Close
  im = m 1 7 9 0 1 5 0 8 Untitled
  bSaveIt = FALSE

Comment: increment sweepNum
Disabled sweepNum = sweepNum+1

Delay
  dpDelayTime = 1
  nDelayUnits = 2
