Journal
Description: This journal performs many things see below

  ---9 gfp

  20180925 - changed from 4 image stack ref to one image ref.
  20180926 - renamed ref images to AutoFocusRef1 (from AutoFocusRef2)
Version VersionNumber=2.4

Comment: Make the Stimulator Actuator to Lower, Select the Digital IO source, Wait for Confirmation of Lower
Disabled Trace Expression="NEW WELL POSITION"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator DOWN"
Disabled Trace Expression="Actuator DOWN"
Disabled Select Digital I/O Device
  stNewDev = "Wait Lines"
  stGUID = ""
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 1
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line1 DIO recieved"
Disabled Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

Comment: SETUP ILLUMINATION AND ACQUIRE SETTINGS for FOCUSING
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"

Comment: autofocus at select ROIs
Trace Expression="Autofocus COURSE step"
CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName
New
  nWidth = 512
  nHeight = 512
  nDepth = 3
  nGray = 0
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
Comment: start at the original Z
Disabled Assign Variable
  OriginalZ = Device.Focus.CurPos
Comment: Reset value
Disabled Assign Variable
  TotalZs = 0
Comment: Reset value
Disabled Assign Variable
  AverageZ = 0
Comment: Load a region
Disabled Load Regions
  stFilename = "D:\MetaMorph\Regions\1.rgn"
  openImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: use active region
Disabled Use Active Region
Comment: Adjust focus
Disabled Adjust Focus
  nSteps = 4
  dStepSize = 200
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Comment: accumulate the Z positions
Disabled Assign Variable
  TotalZs = TotalZs + Device.Focus.CurPos
Comment: Clear all regions
Disabled Clear All Regions
  clearImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: Load a region
Disabled Load Regions
  stFilename = "D:\MetaMorph\Regions\2.rgn"
  openImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: use active region
Disabled Use Active Region
Comment: Adjust focus
Disabled Adjust Focus
  nSteps = 4
  dStepSize = 200
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Adjust Focus
  nSteps = 4
  dStepSize = 100
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Comment: accumulate the Z positions
Disabled Assign Variable
  TotalZs = TotalZs + Device.Focus.CurPos
Comment: Clear all regions
Disabled Clear All Regions
  clearImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: Reset to original Z
Disabled Assign Variable
  Device.Focus.CurPos = OriginalZ
Comment: Load a region
Disabled Load Regions
  stFilename = "D:\MetaMorph\Regions\3.rgn"
  openImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: use active region
Disabled Use Active Region
Comment: Adjust focus
Disabled Adjust Focus
  nSteps = 8
  dStepSize = 100
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Adjust Focus
  nSteps = 4
  dStepSize = 100
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Adjust Focus
  nSteps = 8
  dStepSize = 50
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Comment: accumulate the Z positions
Disabled Assign Variable
  TotalZs = TotalZs + Device.Focus.CurPos
Comment: Clear all regions
Disabled Clear All Regions
  clearImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: Reset to original Z
Disabled Assign Variable
  Device.Focus.CurPos = OriginalZ
Comment: Load a region
Disabled Load Regions
  stFilename = "D:\MetaMorph\Regions\5.rgn"
  openImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: use active region
Disabled Use Active Region
Comment: Adjust focus
Disabled Adjust Focus
  nSteps = 9
  dStepSize = 35
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Adjust Focus
  nSteps = 9
  dStepSize = 0.125
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Adjust Focus
  nSteps = 4
  dStepSize = 200
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Adjust Focus
  nSteps = 4
  dStepSize = 100
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Adjust Focus
  nSteps = 8
  dStepSize = 50
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Comment: accumulate the Z positions
Disabled Assign Variable
  TotalZs = TotalZs + Device.Focus.CurPos
Comment: Clear all regions
Disabled Clear All Regions
  clearImage = m 1 3 9 0 1 -1 -1 8 Untitled
Comment: get the average Z
Disabled Assign Variable
  AverageZ = TotalZs / 1
Comment: move to the average Z position
Disabled Assign Variable
  Device.Focus.CurPos = AverageZ
Disabled Reset to Full Image
Close
  im = "Untitled"
  bSaveIt = FALSE

Comment: Perform an Image Based COURSE Autofocus  = +-375um / 75 um steps = and keep the graph data
Disabled Trace Expression="Autofocus COURSE step"
Disabled CurrentMDAImage = image.filepath
Disabled AFStageLabel = MDA.Status.StagePosName
Disabled New
  nWidth = 300
  nHeight = 300
  nDepth = 3
  nGray = 0
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
Disabled Adjust Focus
  nSteps = 8
  dStepSize = 25
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Load Graph Settings
  stGraphName = "Graph 1"
  stFilename = "D:\MetaMorph\DATA\Trev Focus Graph.gcf"
  nLoadOption = 4
Disabled Copy Graph to Image
  imDest = "Untitled"
  bCombineWithImage = FALSE
  imCombine = m 1 3 10 0 1 -1 -1 8 Untitled
  nPositionOfGraph = 1
Disabled GraphName = StreamSavePath + "\" +  "AutoFocusGraph"+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_COURSE" + ".tif"
Disabled Image.FilePath = GraphName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = "Untitled"
  bSaveIt = FALSE

Comment: Perform an Image Based FINE Autofocus = +-50um / 12.5 um steps =and keep the graph data
Disabled Trace Expression="Autofocus FINE step"
Disabled New
  nWidth = 300
  nHeight = 300
  nDepth = 3
  nGray = 0
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
Disabled Adjust Focus
  nSteps = 8
  dStepSize = 50
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Load Graph Settings
  stGraphName = "Graph 1"
  stFilename = "D:\MetaMorph\DATA\Trev Focus Graph.gcf"
  nLoadOption = 4
Disabled Copy Graph to Image
  imDest = "Untitled"
  bCombineWithImage = FALSE
  imCombine = m 1 3 10 0 1 -1 -1 8 Untitled
  nPositionOfGraph = 1
Disabled GraphName = StreamSavePath + "\" +  "AutoFocusGraph"+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_FINE" + ".tif"
Disabled Image.FilePath = GraphName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = "Untitled"
  bSaveIt = FALSE

Comment: Perform an Image Based SUPER FINE Autofocus = +-12um / 2 um steps =and keep the graph data and also record the Z position
Disabled Trace Expression="Autofocus SUPER FINE step"
Disabled New
  nWidth = 300
  nHeight = 300
  nDepth = 3
  nGray = 0
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
Disabled Adjust Focus
  nSteps = 10
  dStepSize = 2.4
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Adjust Focus
  nSteps = 10
  dStepSize = 0.05
  bDisplayImages = TRUE
  bBacklashCompensation = FALSE
  idxAlgorithm = 1
Disabled Load Graph Settings
  stGraphName = "Graph 1"
  stFilename = "D:\MetaMorph\DATA\Trev Focus Graph.gcf"
  nLoadOption = 4
Disabled Copy Graph to Image
  imDest = "Untitled"
  bCombineWithImage = FALSE
  imCombine = m 1 3 10 0 1 -1 -1 8 Untitled
  nPositionOfGraph = 1
Disabled GraphName = StreamSavePath + "\" +  "AutoFocusGraph"+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_SUPERFINE" + ".tif"
Disabled Image.FilePath = GraphName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = "Untitled"
  bSaveIt = FALSE
Delete File
  stFileToDelete = "%CurrentMDAImage%"

Comment: Store the Z-position in the list so that we can save it later
NewStageLabel = AFStageLabel + "new"
Memorize Absolute Position
  stDescription = "##ERROR##" Override=Variable OverrideVariable=NewStageLabel
  nThisCategory = 1

Comment: Setup Filename information and then collect a TxRed image stream
Disabled Move to a Relative Position
  pos = 9.5
Disabled Trace Expression="TxRed Stream"
Disabled CurrentMDAImage = image.filepath
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-TxRed-Stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-TxRed"
Disabled Configure Stream Acquisition
  nStreamFrames = 10
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 7 9 0 1 73 0 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 7 9 0 1 73 0 8 Untitled
  bSaveIt = FALSE
Disabled Delay
  dpDelayTime = 1
  nDelayUnits = 2

Comment: Setup Filename information and then collect a DIC image stream
Disabled Trace Expression="DIC Stream"
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-DIC-Stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-DIC"
Disabled Configure Stream Acquisition
  nStreamFrames = 10
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 7 9 0 1 81 0 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 7 9 0 1 81 0 8 Untitled
  bSaveIt = FALSE

Comment: Setup Filename information and then collect a CyanFP image stream
Disabled Trace Expression="CyanFP Stream"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Comment: Set the Illumination and Acquire settings
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-CyanFP"
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Comment: Use CURRENT shutter for stream (set above)
Disabled Configure Stream Acquisition
  nStreamFrames = 10
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 7 9 0 1 88 0 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 7 9 0 1 88 0 8 Untitled
  bSaveIt = FALSE

Comment: Here we collect a GFP Reference image after the autofocus to confirm autofocus has worked CHANGED
Disabled Move to a Relative Position
  pos = -9.5
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Disabled Acquire Image
  destAcquire = "Untitled"
  shadingImage = m 1 2 9 2 1 -1 -1 8 Untitled
  bAcquireSubtraction = FALSE
  bAcquireDivisorField = FALSE
  bAcquireShowLive = TRUE
  nAcquireAverage = 1
  nAcquireDivisor = 1
  nAcquireOffset = 0
  bBeep = FALSE
  bRecordOnly = FALSE
  stShutterName = "[Current Shutter]"
Disabled Select Image
  im = "Untitled"
  prompt = "Untitled"
Disabled ImageName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition)  + ".tif"
Disabled Image.FilePath = ImageName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: Here we perform the 9 streams (this could be looped but we are using settings from the circuit mode so this is easier).
Disabled Move to a Relative Position
  pos = 9.5
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 1.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 4
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 3.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 4
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 4
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - a.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_a_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Comment: Move stage in x,y for position b
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - b.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_b_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Comment: Move stage in x,y for position c
Move Stage to Relative Position
  dpX = 116
  dpY = 0
  dpZ = 0
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - c.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_c_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Comment: Move stage in x,y for position d
Move Stage to Relative Position
  dpX = 0
  dpY = 116
  dpZ = 0
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - d.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_d_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Comment: Move stage in x,y for position e
Move Stage to Relative Position
  dpX = 0
  dpY = 116
  dpZ = 0
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - e.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_e_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Comment: Move stage in x,y for position f
Move Stage to Relative Position
  dpX = -116
  dpY = 0
  dpZ = 0
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - f.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_f_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Comment: Move stage in x,y for position g
Move Stage to Relative Position
  dpX = -116
  dpY = 0
  dpZ = 0
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - g.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_g_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Comment: Move stage in x,y for position h
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - h.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_h_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Comment: Move stage in x,y for position i
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
Disabled Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream CyanFP+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug-Gridded - i.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay-Voltage-Doug.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled TempIllumSetting2 = Device.Illumination.Setting
Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_i_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass01-10FP-020Hz040V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 1.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass02-10FP-040Hz040V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 2.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass03-10FP-060Hz040V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 3.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass04-10FP-083Hz040V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 4.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass05-10FP-100Hz040V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 5.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass06-10FP-083Hz040V0100us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 6.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass07-10FP-083Hz040V0200us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 7.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass08-10FP-083Hz040V0300us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 8.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass09-10FP-083Hz040V0500us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass10-10FP-083Hz040V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass11-10FP-083Hz040V1200us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass12-10FP-083Hz002V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass13-10FP-083Hz005V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass14-10FP-083Hz010V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass15-10FP-083Hz015V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass16-10FP-083Hz020V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass17-10FP-083Hz030V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass18-10FP-083Hz040V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass19-10FP-083Hz050V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass20-10FP-083Hz060V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Grass21-10FP-083Hz100V1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Illum TimePoint 9.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-TxRed+Trigger NoDelay.JNL
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Comment: Here we perform the 15 streams for test the STMISOL stimulator.
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A01-80Hz07mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A02-80Hz15mA01ms_2"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A03-80Hz22mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A04-80Hz40mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A05-80Hz58mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A06-80Hz62mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A07-20Hz62mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A08-40Hz62mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A09-60Hz62mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A10-80Hz62mA01ms"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A11-80Hz62mA100us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A12-80Hz62mA200us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A13-80Hz62mA300us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A14-80Hz62mA500us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL
Disabled Delay
  dpDelayTime = 13
  nDelayUnits = 2
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "A15-80Hz62mA1000us"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled RunJournal JournalName=D:\MetaMorph\Journals\Single Stream Ana-GFP-0.15+Trigger NoDelay.JNL

Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-TxRed"
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-TxRed-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Acquire Image
  destAcquire = "Untitled"
  shadingImage = m 1 2 9 2 1 -1 -1 8 Untitled
  bAcquireSubtraction = FALSE
  bAcquireDivisorField = FALSE
  bAcquireShowLive = TRUE
  nAcquireAverage = 1
  nAcquireDivisor = 1
  nAcquireOffset = 0
  bBeep = FALSE
  bRecordOnly = FALSE
  stShutterName = "[Current Shutter]"
Disabled Select Image
  im = "Untitled"
  prompt = "Untitled"
Disabled ImageName = StreamSavePath + "\" + "AutoFocusRef2   "+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition)  + "_" + Device.Illumination.Setting + ".tif"
Disabled Image.FilePath = ImageName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5

Comment: Here we collect a Reference image after the all streams to determine stage movement CHANGE
Disabled Move to a Relative Position
  pos = -9.5
Disabled Trace Expression="TxRed Stream"
Disabled CurrentMDAImage = image.filepath
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Disabled Configure Stream Acquisition
  nStreamFrames = 4
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = StreamSavePath + "\" + "AutoFocusRef2   "+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = 9.5

Comment: Setup Filename information and then collect a TxRed image stream
Disabled Trace Expression="TxRed Stream"
Disabled CurrentMDAImage = image.filepath
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-TxRed-Stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-TxRed-prephotoswitch"
Disabled Configure Stream Acquisition
  nStreamFrames = 35
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + "prephotoswitch" + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: Setup Filename information and then collect a TxRed image stream with photoswitch illumination
Disabled Trace Expression="TxRed Stream"
Disabled CurrentMDAImage = image.filepath
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-TxRed-Stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-TxRed-photoswitch"
Disabled Configure Stream Acquisition
  nStreamFrames = 35
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + "photoswitch" + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Delay
  dpDelayTime = 1
  nDelayUnits = 2

Comment: Setup Filename information and then collect a TxRed image stream
Disabled Trace Expression="TxRed Stream"
Disabled CurrentMDAImage = image.filepath
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-TxRed-Stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-TxRed-postphotoswitch"
Disabled Configure Stream Acquisition
  nStreamFrames = 35
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + "postphotoswitch" + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: Setup Filename information and then collect a TxRed bleach image stream
Disabled Trace Expression="TxRed Stream"
Disabled CurrentMDAImage = image.filepath
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-TxRed-Bleach.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-TxRed-bleach"
Disabled Configure Stream Acquisition
  nStreamFrames = 10
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Move to a Relative Position
  pos = -9.5

Disabled Trace Expression="DAPI Stream"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-DAPI"
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-Autofluorescence-Stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Configure Stream Acquisition
  nStreamFrames = 10
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + Trial_No
Disabled NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator UP"
Disabled Trace Expression="Actuator UP"
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 2
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line2 DIO recieved"
Disabled Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

