Journal
Description: test a position in a well for GFP brightness
Version VersionNumber=2.4
Set Overwrite Message
  bDisableOverwriteMsg = TRUE
Trace Expression="testing position"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GABA-NoTrig"
Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GETI-Screen\iGABAsnfr-refImage.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Acquire
  imDest = "Untitled"
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\GETI-Screen\scratch_journals\test_thresholding.jnl"
IfThenElse Expression=pxAboveThresh > bestpxAboveThresh
  CodeBlock Condition=true
    Trace Expression="better position!"
    Memorize Absolute Position
      stDescription = "bestPos" Override=None OverrideVariable=Description
      nThisCategory = 1
    bestpxAboveThresh = pxAboveThresh
  CodeBlock Condition=false
    Trace Expression="not a better position!"
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

