Journal
Description: 2-step software focus (coarse and fine)
Version VersionNumber=2.4
Trace Expression="Start Software Focus"
Comment: this illumination setting keeps the shutter open as autofocus is performed
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GABA-NoTrig-NoShutter"

Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Adjust Focus
  nSteps = 10
  dStepSize = 2
  bDisplayImages = FALSE
  bBacklashCompensation = TRUE
  idxAlgorithm = 1
Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Adjust Focus
  nSteps = 5
  dStepSize = 1
  bDisplayImages = FALSE
  bBacklashCompensation = TRUE
  idxAlgorithm = 1
Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GABA-NoTrig"
