<Journal><Description>testPosAndMoveToBest
testing positions in a well and moving to brightest one</Description>
<Version VersionNumber="2.4"/>
<CodeBlock>
<FunctionEntry GUID="{0x3cef1e9b-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Memorize Absolute Position" Interactive="0" ApplicationName="mmproc" VersionNumber="1" MissingImage="0" CommandID="1" MetaJournal="0000000010CE7E80" IsCurrentVersion="1" Variables="0000000010CE7BA8">
<Variable Type="String" Name="jnlMemorizeAbsPos.stDescription" NDimensions="0" Override="" OverrideVariable="">7 bestPos</Variable>
<Variable Type="Integer" Name="jnlMemorizeAbsPos.nThisCategory" NDimensions="0" Override="" OverrideVariable="">1</Variable>
</FunctionEntry>
<AssignVariableEntry VariableName="AFStageLabel" Expression="MDA.Status.StagePosName" Disabled="0"/>
<AssignVariableEntry VariableName="bestpxAboveThresh" Expression="0"/>
<AssignVariableEntry VariableName="move_delta" Expression="400"/>
<AssignVariableEntry VariableName="move_X" Expression="0"/>
<AssignVariableEntry VariableName="move_Y" Expression="0"/>
<AssignVariableEntry VariableName="move_Z" Expression="0"/>
<ForNextLoopEntry LoopVariable="posNum" StartValue="1" EndValue="8" StepValue="1">
<CodeBlock>
<IfThenElseEntry Expression="posNum = 1">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="move_X" Expression="0"/>
<AssignVariableEntry VariableName="move_Y" Expression="move_delta"/>
</CodeBlock>
<CodeBlock Condition="false"/>
</IfThenElseEntry>
<IfThenElseEntry Expression="posNum = 2">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="move_X" Expression="-1*move_delta"/>
<AssignVariableEntry VariableName="move_Y" Expression="0"/>
</CodeBlock>
<CodeBlock Condition="false"/>
</IfThenElseEntry>
<IfThenElseEntry Expression="posNum = 3">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="move_X" Expression="0"/>
<AssignVariableEntry VariableName="move_Y" Expression="-1*move_delta"/>
</CodeBlock>
<CodeBlock Condition="false"/>
</IfThenElseEntry>
<IfThenElseEntry Expression="posNum = 4">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="move_X" Expression="0"/>
<AssignVariableEntry VariableName="move_Y" Expression="-1*move_delta"/>
</CodeBlock>
<CodeBlock Condition="false"/>
</IfThenElseEntry>
<IfThenElseEntry Expression="posNum = 5">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="move_X" Expression="move_delta"/>
<AssignVariableEntry VariableName="move_Y" Expression="0"/>
</CodeBlock>
<CodeBlock Condition="false"/>
</IfThenElseEntry>
<IfThenElseEntry Expression="posNum = 6">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="move_X" Expression="move_delta"/>
<AssignVariableEntry VariableName="move_Y" Expression="0"/>
</CodeBlock>
<CodeBlock Condition="false"/>
</IfThenElseEntry>
<IfThenElseEntry Expression="posNum = 7">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="move_X" Expression="0"/>
<AssignVariableEntry VariableName="move_Y" Expression="move_delta"/>
</CodeBlock>
<CodeBlock Condition="false"/>
</IfThenElseEntry>
<IfThenElseEntry Expression="posNum = 8">
<CodeBlock Condition="true">
<AssignVariableEntry VariableName="move_X" Expression="0"/>
<AssignVariableEntry VariableName="move_Y" Expression="move_delta"/>
</CodeBlock>
<CodeBlock Condition="false"/>
</IfThenElseEntry>
<TraceEntry Expression="&quot;X=&quot; + STR(move_X) + &quot; Y=&quot; + STR(move_Y)"/>
<FunctionEntry GUID="{0x3cef1e93-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Move Stage to Relative Position" Interactive="0" ApplicationName="mmproc" VersionNumber="1" MissingImage="0" CommandID="2" MetaJournal="0000000010CD6740" IsCurrentVersion="1" Variables="0000000010CD6468">
<Variable Type="Double" Name="jnlMoveStageRel.dpX" NDimensions="0" Override="Variable" OverrideVariable="move_X">0</Variable>
<Variable Type="Double" Name="jnlMoveStageRel.dpY" NDimensions="0" Override="Variable" OverrideVariable="move_Y">0</Variable>
<Variable Type="Double" Name="jnlMoveStageRel.dpZ" NDimensions="0" Override="Variable" OverrideVariable="move_Z">0</Variable>
</FunctionEntry>
<FunctionEntry GUID="{0x79f510e8-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Run Journal" Interactive="0" ApplicationName="journal" VersionNumber="1" MissingImage="0" CommandID="3" MetaJournal="00000000152ABB10" IsCurrentVersion="1" Variables="00000000152AB838">
<Variable Type="String" Name="ExecuteJournalJNL.stExecuteJournal" NDimensions="0" Override="" OverrideVariable="">79 D:\GitHub\MetaMorph\Rig-1\GETI-Screen\scratch_journals\test_positionTesting.jnl</Variable>
</FunctionEntry>
</CodeBlock>
</ForNextLoopEntry>
<FunctionEntry GUID="{0x3cef1e9f-0xe09c-0x11d3-0x93-0x9a-0x0-0x10-0x5a-0x4-0x2f-0x99}" FunctionName="Move To Description" Interactive="0" ApplicationName="mmproc" VersionNumber="1" MissingImage="0" CommandID="4" MetaJournal="0000000010CE9130" IsCurrentVersion="1" Variables="0000000010CE8E58">
<Variable Type="String" Name="jnlMoveToStageDesc.stDescription" NDimensions="0" Override="" OverrideVariable="">7 bestPos</Variable>
</FunctionEntry>
</CodeBlock>
</Journal>
