Journal
Description: Main journal for iGABASnFR imaging
  Moved to rig 1 on 8/5/20
Version VersionNumber=2.4
Comment: number of frames to acquire
numFrames = 550

sweepNum = 1
Comment: Move the Mirror to the Camera Position if it not there already (if it is there already it will switch back and then forth)
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Binocular"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"

Comment: Select Correct Camera
Select Camera / Board
  stDeviceName = "Andor Camera"
  stCameraName = "Andor Camera"

Comment: Select Correct Objective
Select Magnification
  stSetting = "10X High NA"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\Actuator Up.jnl"
Trace Expression="Actuator UP"
Disabled Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
MDA - Load Stage List Interactive
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
Assign Variable Interactive
  focusOffset = 152
Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "D:\Neuronal_Culture_DataMM" Override=None OverrideVariable=Select Directory
StreamSavePath = SelectDirectory.Path
Enter Variable
  stVariableName = "Plate_Name"
  nDialogType = 4
  stDialogTitle = "Plate Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Plate Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1
Disabled Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\GETI-Screen\Select_Folder_IK.jnl"
MDA - Load State
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GETI-Screen\timeseries_inner.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Disabled Open Data Log
  bOpenFile = TRUE
  bOpenDDE = FALSE
  stOpenFile = "D:\MetaMorph\Data\today\ilya\testlogs\test.LOG" Override=Variable OverrideVariable=StreamSavePath + "\datalog.LOG"
  nOpenFileMode = 0 Override=None OverrideVariable=File Mode
  stDDEContext = "" Override=None OverrideVariable=DDE Context
Disabled Annotate Log File
  nLogType = 1
  bDelimitAnnotation = FALSE
  stAnnotation = "MDA launched"
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled
Disabled Close Data Log

Comment: play a tune to signify plate is done
Disabled Run Program
  stCommandLine = "D:\GitHub\MetaMorph\Rig-1\caramia.bat"
  nState = 3
  bWaitOnExec = FALSE

Comment: Move and prepare for next plate
Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\Actuator Up.jnl"
Move to an Absolute Position
  pos = 0
Move Stage to Absolute Position
  dpX = -53212
  dpY = -6459
  dpZ = 8267
Disabled Trace Expression="Start Focus"
Disabled Start Continuous Focusing
  m_dpRange = 500
Disabled Stop Continuous Focusing
Disabled Trace Expression="Focus Complete"
Disabled Trace Expression=Device.Focus.CurPos
Disabled Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+FocusOffset
Disabled Run Journal
  stExecuteJournal = "D:\GitHub\MetaMorph\Rig-1\GETI-Screen\softwareFocus.jnl"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GABA-NoTrig"

