Journal
Description: 10x reference images for python ilstasik cellfinder to read
Version VersionNumber=2.4

Comment: autofocus
Disabled Run Journal
  stExecuteJournal = "D:\MetaMorph\Journals\10x_refs_acq_oneshot.jnl"
Start Continuous Focusing
  m_dpRange = 1000
Stop Continuous Focusing
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+focusOffset
Comment: SETUP ILLUMINATION AND ACQUIRE SETTINGS for FOCUSING
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI GFP"

Comment: set variables names
CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName
Disabled New
  nWidth = 512
  nHeight = 512
  nDepth = 3
  nGray = 0
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
CurrentMDAImage = image.filepath
Disabled TempIllumSetting2 = Device.Illumination.Setting
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
Disabled CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_a_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Disabled NewStreamName = SelectDirectory.Path + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_i_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
NewStreamName = SelectDirectory.Path + "\" +  Plate_Name  + "_" + AFStageLabel + "_z_" + STR(Device.Focus.CurPos) + "_x_" + STR(Device.Stage.XPosition)  + "_y_" +  STR(Device.Stage.YPosition) + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

