Journal
Description: Setup MDA for One Button Acquisition
Version VersionNumber=2.4
Comment: Move the Mirror to the Camera Position if it not there already (if it is there already it will switch back and then forth).
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Disabled Select Camera / Board
  stDeviceName = "Andor Camera"
  stCameraName = "Andor Camera"
Select Magnification
  stSetting = "10X High NA"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "D:\MetaMorph\Journals\Actuator Up.jnl"

Disabled Run Journal
  stExecuteJournal = "D:\MetaMorph\Journals\Select Folder.jnl"
Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "D:\Neuronal_Culture_DataMM\refs\temp" Override=None OverrideVariable=Select Directory
Trace Expression=SelectDirectory.Path
Enter Variable
  stVariableName = "Plate_Name"
  nDialogType = 4
  stDialogTitle = "Plate Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Plate Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1

Assign Variable Interactive
  focusOffset = 113
Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG"
MDA - Load Stage List Interactive
  stFileName = "D:\Neuronal_Culture_DataMM\refs\sampleIn.STG"
Disabled MDA - Load State
  stFileName = "D:\MetaMorph\MDA_State\96well-GFP-Andor-10sec-OneShot.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 3
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
MDA - Load State
  stFileName = "D:\MetaMorph\Journals\Daniel\10x_refs.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled

Disabled Save Memory List
  stFilename = "D:\MetaMorph\Data\ONESHOT.STG"
