Journal
Description: Arclight 96 protocol for voltron/positron as of 20200323
  was previously "Acquisition 96well GFP Andor 10secISI2017ARCLIGHT96F_v2.JNL"
Version VersionNumber=2.4

Comment: Make the Stimulator Actuator to Lower, Select the Digital IO source, Wait for Confirmation of Lower
RunJournal JournalName=D:\GitHub\MetaMorph\Rig-1\Actuator Down.JNL
Trace Expression="Actuator DOWN"
Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

Comment: SETUP ILLUMINATION AND ACQUIRE SETTINGS for FOCUSING
Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GEVI-Screen\GEVI-focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI GFP"

Comment: Use ZDC to get Z-offset value
Start Continuous Focusing
  m_dpRange = 500
Stop Continuous Focusing
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+focusOffset

Comment: autofocus at select ROIs
CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName

Comment: acquire image stream with stimulation
CurrentVoltageName = "010FP@83Hz"
RunJournal JournalName=D:\GitHub\MetaMorph\Rig-1\GEVI-Screen\GEVI-main-trig.JNL

Comment: acquire reference image
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GEVI-Screen\GEVI-focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI GFP"
Configure Stream Acquisition
  nStreamFrames = 4
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef2   "+ "_" + AFStageLabel + "_a_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + "NoStim" + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
RunJournal JournalName=D:\GitHub\MetaMorph\Rig-1\Actuator Up.JNL
Trace Expression="Actuator UP"
Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

