Journal
Description: Single Stream Analog GFP and no Delay (ISI)
  was previously "Single Stream Ana-GFP-0.15+Trigger NoDelay-Voltage-Doug"
Version VersionNumber=2.4
Acquire - Load Setting
  stFileName = "D:\GitHub\MetaMorph\Rig-1\GEVI-Screen\GEVI-stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "blueLED15-Voltage-Doug"
Comment: Use CURRENT shutter for stream (set above)
Configure Stream Acquisition
  nStreamFrames = 2200
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = FALSE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"

Comment: wavesurfer version
NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + "Sweep" + "_" + STR(Sweep_No)

NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 7 9 0 1 4 0 8 Untitled
  nParm = 0
Close
  im = m 1 7 9 0 1 4 0 8 Untitled
  bSaveIt = FALSE
Sweep_No = Sweep_No+1
