Journal
Description: iterates for every well
  called by MDA
  IK 11-8-18
Version VersionNumber=2.4

CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName

Trace Expression="NEW WELL POSITION"

Comment: hardware focus doesn't wotk with 40x 0.9NA
Disabled Trace Expression="hardware focus"
Disabled AFStageLabel = MDA.Status.StagePosName
Disabled Start Continuous Focusing
  m_dpRange = 500
Disabled Stop Continuous Focusing
Disabled Trace Expression="hardware Focus Complete"
Disabled Trace Expression=Device.Focus.CurPos
Disabled Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+FocusOffset

Comment: Find best position to stim - obsolete by camera's larger FOV
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Glu-noTrig" Override=None OverrideVariable=Setting Name
Disabled Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Glu_screening\testPosAndMoveToBest.jnl"
Disabled Delay
  dpDelayTime = 1.5
  nDelayUnits = 2
Disabled Log Stage Position

Comment: ACTUATOR DOWN!
Disabled Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\Actuator DOWN.jnl"
Disabled Trace Expression="Actuator DOWN"

Comment: software autofocus (added 8/8/20)
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\minis_40x_100Hz_30s\minis-softwareFocus.jnl"

CurrentVoltageName = "flash"
CurrentMDAImage = image.filepath
Comment: sequence: 1AP, 20AP, raise electrode, then ref image
Comment: ===5AP===
CurrentVoltageName = "0AP"
CurrentMDAImage = image.filepath
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\minis_40x_100Hz_30s\minis-acquire.jnl"
Delay
  dpDelayTime = 1
  nDelayUnits = 2

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Disabled Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\ActuatorUP.jnl"
Disabled Trace Expression="Actuator UP"
Disabled Delay
  dpDelayTime = 4
  nDelayUnits = 2

Comment: ref image
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\Axonal_Silencing\yGluSnFR_binned_ref.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP-noTrig" Override=None OverrideVariable=Setting Name
Configure Stream Acquisition
  nStreamFrames = 4
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_ref.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE




