Journal
Description: IK
  single acquisition of 10x image per well (brightfield and GFP)

  TODO: set full field acquisition and figure out where GFP cube goes
Version VersionNumber=2.4

Comment: Make the Stimulator Actuator to Lower, Select the Digital IO source, Wait for Confirmation of Lower
Trace Expression="NEW WELL POSITION"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator DOWN"
Disabled Trace Expression="Actuator DOWN"
Disabled Select Digital I/O Device
  stNewDev = "Wait Lines"
  stGUID = ""
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 1
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line1 DIO recieved"
Disabled Delay
  dpDelayTime = 1.5
  nDelayUnits = 2
AFStageLabel = MDA.Status.StagePosName

Comment: SETUP ILLUMINATION AND ACQUIRE SETTINGS for FOCUSING
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Analog-GFP-0.15"
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Acquire
  imDest = "Untitled"
GFPname = StreamSavePath + "\" + "GFP"+ "_" + AFStageLabel + ".tif"
Image.FilePath = GFPname
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "brightfield"
Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Acquire
  imDest = "Untitled"
BFname = StreamSavePath + "\" + "BF"+ "_" + AFStageLabel + ".tif"
Image.FilePath = BFname
Comment: autofocus at select ROIs
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: ===============everything past  here is unused and will be removed eventually -- IK===================
