Journal
Description: This journal performs many things see below - 2018GCAMP96uf
Version VersionNumber=2.4

Comment: Make the Stimulator Actuator to Lower, Select the Digital IO source, Wait for Confirmation of Lower
Trace Expression="NEW WELL POSITION"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Actuator DOWN.jnl"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator DOWN"
Disabled Trace Expression="Actuator DOWN"
Disabled Select Digital I/O Device
  stNewDev = "NI-DAQmx Digital IO Bank"
  stGUID = ""
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 1
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line1 DIO recieved"

Comment: SETUP ILLUMINATION AND ACQUIRE SETTINGS for FOCUSING
Acquire - Load Setting
  stFileName = "E:\Metamorph\Journals\GECI_screening\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GCaMP_TxRed"

Comment: autofocus at select ROIs
Trace Expression="Autofocus COURSE step"
CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName
New
  nWidth = 512
  nHeight = 512
  nDepth = 3
  nGray = 0
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0

Comment: Graph stuff - can probably delete
Disabled New
  nWidth = 300
  nHeight = 300
  nDepth = 3
  nGray = 0
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
Disabled Load Graph Settings
  stGraphName = "Graph 1"
  stFilename = "D:\MetaMorph\DATA\Trev Focus Graph.gcf"
  nLoadOption = 4
Disabled Copy Graph to Image
  imDest = "Untitled"
  bCombineWithImage = FALSE
  imCombine = m 1 3 10 0 1 -1 -1 8 Untitled
  nPositionOfGraph = 1
Disabled GraphName = StreamSavePath + "\" +  "AutoFocusGraph"+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_SUPERFINE" + ".tif"
Disabled Image.FilePath = GraphName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Disabled Close
  im = "Untitled"
  bSaveIt = FALSE
Disabled Delete File
  stFileToDelete = "%CurrentMDAImage%"

Comment: Use ZDC to get Z-offset value
Start Continuous Focusing
  m_dpRange = 1000
Disabled Start Continuous Focusing
  m_dpRange = 200
Stop Continuous Focusing
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+focusOffset
Disabled Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos

Comment: Store the Z-position in the list so that we can save it later
NewStageLabel = AFStageLabel + "new"
Memorize Absolute Position
  stDescription = "##ERROR##" Override=Variable OverrideVariable=NewStageLabel
  nThisCategory = 1

Comment: Setup Filename information and then collect a TxRed image stream
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GCaMPTxRed"
Acquire - Load Setting
  stFileName = "E:\Metamorph\Journals\GECI_screening\Analog-TxRed-Stream.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Configure Stream Acquisition
  nStreamFrames = 10
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 2
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = Plate_Name + "_" + MDA.Status.StagePosName + "_" +  Solution + "_" + Drug_Mix + "_" + Volume + "_" + Stim_Volts + "_" + CurrentVoltageName + "_" + Device.Illumination.Setting + "_" + Trial_No
NewStreamName = StreamSavePath + "\" + NewStreamName + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Delay
  dpDelayTime = 1
  nDelayUnits = 2


Comment: Here we collect a GFP Reference image after the autofocus to confirm autofocus has worked
Disabled Move to a Relative Position
  pos = -9.5
Acquire - Load Setting
  stFileName = "E:\Metamorph\Journals\GECI_screening\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GCaMPnoTrig"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
Disabled Acquire Image
  destAcquire = "Untitled"
  shadingImage = m 1 2 9 2 1 -1 -1 8 Untitled
  bAcquireSubtraction = FALSE
  bAcquireDivisorField = FALSE
  bAcquireShowLive = TRUE
  nAcquireAverage = 1
  nAcquireDivisor = 1
  nAcquireOffset = 0
  bBeep = FALSE
  bRecordOnly = TRUE
  stShutterName = "[Current Shutter]"
Disabled Select Image
  im = "Untitled"
  prompt = "Untitled"
ImageName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition)  + ".tif"
Image.FilePath = ImageName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: RUN STIMULATIONS
Comment: IK 11/14/19: modifying for more stimuli, removing unnecessary journal calls
Comment: IK 11/14/19: original settings for fast GCaMPs: 1AP, 3AP, 10AP, 160AP ONLY!
CurrentVoltageName = "001FP@83Hz"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GECI_screening\GECI Trigger.jnl"
Delay
  dpDelayTime = 4
  nDelayUnits = 2
Disabled CurrentVoltageName = "002FP@83Hz"
Disabled Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GECI_screening\GECI Trigger.jnl"
Delay
  dpDelayTime = 4
  nDelayUnits = 2
CurrentVoltageName = "003FP@83Hz"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GECI_screening\GECI Trigger.jnl"
Delay
  dpDelayTime = 4
  nDelayUnits = 2
Disabled CurrentVoltageName = "005FP@83Hz"
Disabled Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GECI_screening\GECI Trigger.jnl"
Disabled Delay
  dpDelayTime = 4
  nDelayUnits = 2
CurrentVoltageName = "010FP@83Hz"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GECI_screening\GECI Trigger.jnl"
Delay
  dpDelayTime = 4
  nDelayUnits = 2
Disabled CurrentVoltageName = "020FP@83Hz"
Disabled Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GECI_screening\GECI Trigger.jnl"
Disabled Delay
  dpDelayTime = 4
  nDelayUnits = 2
Disabled CurrentVoltageName = "040FP@83Hz"
Disabled Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GECI_screening\GECI Trigger.jnl"
Disabled Delay
  dpDelayTime = 4
  nDelayUnits = 2
CurrentVoltageName = "160FP@83Hz"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GECI_screening\GECI Trigger.jnl"
Delay
  dpDelayTime = 4
  nDelayUnits = 2

Comment: Here we collect a Reference image after the all streams to determine stage movement
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GCaMPnoTrig"
Acquire - Load Setting
  stFileName = "E:\Metamorph\Journals\GECI_screening\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
Disabled Acquire Image
  destAcquire = "Untitled"
  shadingImage = m 1 2 9 2 1 -1 -1 8 Untitled
  bAcquireSubtraction = FALSE
  bAcquireDivisorField = FALSE
  bAcquireShowLive = TRUE
  nAcquireAverage = 1
  nAcquireDivisor = 1
  nAcquireOffset = 0
  bBeep = FALSE
  bRecordOnly = FALSE
  stShutterName = "[Current Shutter]"
Disabled Select Image
  im = "Untitled"
  prompt = "Untitled"
ImageName = StreamSavePath + "\" + "AutoFocusRef2   "+ "_" + AFStageLabel + "_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition)  + ".tif"
Image.FilePath = ImageName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE


Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator UP"
Disabled Trace Expression="Actuator UP"
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 2
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Actuator UP confirmed"
Disabled Delay
  dpDelayTime = 3
  nDelayUnits = 2

