Journal
Description: Setup MDA for One Button Acquisition - 2018GCAMP96UF
Version VersionNumber=2.4
Comment: Move the Mirror to the Camera Position if it not there already (if it is there already it will switch back and then forth).
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Binocular"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"

Comment: Select Correct Camera
Select Camera / Board
  stDeviceName = "Hamamatsu DCAM Camera"
  stCameraName = "Hamamatsu DCAM Camera"

Comment: Select Correct Objective
Select Magnification
  stSetting = "10X High NA"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\ActuatorUP.jnl"
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 2
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line2 DIO recieved"
Delay
  dpDelayTime = 3
  nDelayUnits = 2

Comment: Reset Origin each time so that relative positions are maintained
Disabled Go To Origin
Disabled Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Move stage to Absolute Origin"
  stMessage = "Manually Move stage to Absolute Origin \n\nCheck Above the X and Y values\n\nIf they are less than 50 press Continue.\n\nIf not, Cancel & Manually open Devices, Stage, Move stage to Absolute Position and reset Origin."
  msgX = 1517
  msgY = 77
Disabled Reset Stage Origin
  bUpdatePoints = FALSE
Disabled Move Stage to Relative Position
  dpX = -7549
  dpY = -10000
  dpZ = 6010
sweepnum = 1
Assign Variable Interactive
  focusOffset = 58.83

Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG"
MDA - Load Stage List Interactive
  stFileName = "D:\MetaMorph\DATA\StagePositionsAligned.STG"
MDA - Load State
  stFileName = "E:\GitHub\MetaMorph\Rig-2\GECI_screening\WHaloCamp\WHalo.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled

