Journal
Description: 2-step software focus (coarse and fine)
Version VersionNumber=2.4
Trace Expression="Start Software Focus"
Comment: this illumination setting keeps the shutter open as autofocus is performed
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP--noTrig-noShutter"
Comment: this acquisition is necessary since the other settings load external triggers
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\GECI_screening\frequency_response\freqresp_internal_focus.AST" Override=None OverrideVariable=File Name
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE

Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Adjust Focus
  nSteps = 10
  dStepSize = 2
  bDisplayImages = FALSE
  bBacklashCompensation = TRUE
  idxAlgorithm = 1
Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Adjust Focus
  nSteps = 5
  dStepSize = 1
  bDisplayImages = FALSE
  bBacklashCompensation = TRUE
  idxAlgorithm = 1
Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP-noTrig"
Trace Expression="software Focus Complete"
Trace Expression=Device.Focus.CurPos


Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\GECI_screening\frequency_response\freqresp_ref.AST" Override=None OverrideVariable=File Name
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE

