Journal
Description: Setup MDA for One Button Acquisition
Version VersionNumber=2.4

Comment: Select Correct Camera
Select Camera / Board
  stDeviceName = "Hamamatsu DCAM Camera"
  stCameraName = "Hamamatsu DCAM Camera"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"

Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "Z:\GECIScreenData\GECI_Imaging_Data\Non-production\20230316_TransgenicFlyGCaMP_raw\P01-10x_refs-rig2" Override=None OverrideVariable=Select Directory
StreamSavePath = SelectDirectory.Path
Enter Variable
  stVariableName = "Plate_Name"
  nDialogType = 4
  stDialogTitle = "Plate Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Plate Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1

Assign Variable Interactive
  focusOffset10 = 69
Comment: Load in the list of stage positions to image and construct names
MDA - Load Stage List Interactive
  stFileName = "Z:\GECIScreenData\GECI_Imaging_Data\Non-production\20230316_TransgenicFlyGCaMP_raw\P01-20230309-rig2.STG"
MDA - Load State
  stFileName = "E:\GitHub\MetaMorph\Rig-2\GECI_screening\transgenic_fly\fly-MDS.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled

