Journal

Version VersionNumber=2.4
Comment: adapted for rig 2 20190926 DR
AFStageLabel = MDA.Status.StagePosName
Comment: SETUP ILLUMINATION AND ACQUIRE SETTINGS for FOCUSING
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\GECI_screening\transgenic_fly\fly-ref.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = TRUE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP-noTrig-LED" Override=None OverrideVariable=Setting Name

Comment: 10x ref
Trace Expression="hardware focus"
Start Continuous Focusing
  m_dpRange = 500
Stop Continuous Focusing
Trace Expression="hardware Focus Complete"
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+FocusOffset10
Select Magnification
  stSetting = "10X High NA"
Configure Stream Acquisition
  nStreamFrames = 4
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_10xRef.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: common settings for 40x
Select Magnification
  stSetting = "40X"
Trace Expression="hardware focus"
Start Continuous Focusing
  m_dpRange = 500
Stop Continuous Focusing
Trace Expression="hardware Focus Complete"
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+FocusOffset10+46
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP-noTrig-LED"
CurrentMDAImage = image.filepath
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Comment: Position a
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-a.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position b
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-b.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position c
Move Stage to Relative Position
  dpX = 116
  dpY = 0
  dpZ = 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-c.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position d
Move Stage to Relative Position
  dpX = 0
  dpY = 116
  dpZ = 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-d.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position e
Move Stage to Relative Position
  dpX = 0
  dpY = 116
  dpZ = 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-e.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position f
Move Stage to Relative Position
  dpX = -116
  dpY = 0
  dpZ = 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-f.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position g
Move Stage to Relative Position
  dpX = -116
  dpY = 0
  dpZ = 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-g.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position h
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-h.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position i
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_40xRef-i.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

