Journal
Description: TODO======================================
Version VersionNumber=2.4
Comment: Illumination notes
  reference illumination: IK_refIllum 
  triggered stream illumination: IK_strimIllum_trig
Comment: number of frames to acquire
numFrames = 550

sweepNum = 1
Comment: Move the Mirror to the Camera Position if it not there already (if it is there already it will switch back and then forth)
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Binocular"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"

Comment: Select Correct Camera
Select Camera / Board
  stDeviceName = "Andor Camera"
  stCameraName = "Andor Camera"

Comment: Select Correct Objective
Select Magnification
  stSetting = "10X High NA"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator UP"
Trace Expression="Actuator UP"
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 2
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line2 DIO recieved"
Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
MDA - Load Stage List Interactive
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
Assign Variable Interactive
  focusOffset = 90
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GETI_screening\Select_Folder_IK.jnl"
MDA - Load State
  stFileName = "E:\Metamorph\MDA_State\GETI_screening\timeseries_inner.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Open Data Log
  bOpenFile = TRUE
  bOpenDDE = FALSE
  stOpenFile = "D:\MetaMorph\Data\today\ilya\testlogs\test.LOG" Override=Variable OverrideVariable=StreamSavePath + "\datalog.LOG"
  nOpenFileMode = 0 Override=None OverrideVariable=File Mode
  stDDEContext = "" Override=None OverrideVariable=DDE Context
Annotate Log File
  nLogType = 1
  bDelimitAnnotation = FALSE
  stAnnotation = "MDA launched"
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled
Close Data Log

Comment: Save positions and move to origin
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"
Disabled Save Memory List
  stFilename = "E:\_dataToday\oneshot.STG"
Move to an Absolute Position
  pos = 0
Move Stage to Absolute Position
  dpX = 0
  dpY = 0
  dpZ = 0

