Journal

Version VersionNumber=2.4
Comment: adapted for rig 2 20190926 DR
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GEVI_screening\GEVI ZDC Focus.jnl"
Comment: SETUP ILLUMINATION AND ACQUIRE SETTINGS for FOCUSING
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"

Comment: autofocus at select ROIs
Trace Expression="Autofocus COURSE step"
CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName
New
  nWidth = 512
  nHeight = 512
  nDepth = 3
  nGray = 0
  nName = "Untitled"
  imNew = "New"
  r = 0
  g = 0
  b = 0
  r16 = 0
  g16 = 0
  b16 = 0
Close
  im = "Untitled"
  bSaveIt = FALSE
Delete File
  stFileToDelete = "%CurrentMDAImage%"

Comment: Position a
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_a_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position b
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_b_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position c
Move Stage to Relative Position
  dpX = 116
  dpY = 0
  dpZ = 0
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_c_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position d
Move Stage to Relative Position
  dpX = 0
  dpY = 116
  dpZ = 0
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_d_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position e
Move Stage to Relative Position
  dpX = 0
  dpY = 116
  dpZ = 0
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_e_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position f
Move Stage to Relative Position
  dpX = -116
  dpY = 0
  dpZ = 0
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_f_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position g
Move Stage to Relative Position
  dpX = -116
  dpY = 0
  dpZ = 0
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_g_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position h
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_h_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE
Comment: Move stage in x,y for position i
Move Stage to Relative Position
  dpX = 0
  dpY = -116
  dpZ = 0
Trace Expression="TxRed Stream"
CurrentMDAImage = image.filepath
TempIllumSetting2 = Device.Illumination.Setting
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "NoStim"
CurrentVoltageName = Device.Illumination.Setting
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\Analog-GFP-Focus.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GEVI-GFP"
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + "AutoFocusRef1   "+ "_" + AFStageLabel + "_i_" + STR(Device.Focus.CurPos) + "_um_" + "XY-Position_" + STR(Device.Stage.XPosition)  + "_" +  STR(Device.Stage.YPosition) + "_" + Device.Illumination.Setting + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

