Journal
Description: 20190619 - wait lines enabled, delays disabled.

  Setup MDA for One Button Acquisition
Version VersionNumber=2.4
Comment: Move the Mirror to the Camera Position if it not there already (if it is there already it will switch back and then forth).
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Binocular"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"

Comment: Select Correct Camera
Select Camera / Board
  stDeviceName = "Andor Camera"
  stCameraName = "Andor Camera"

Comment: Select Correct Objective
Select Magnification
  stSetting = "40X"

Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"

sweepnum = 1
Disabled Sweep_No = 1
Assign Variable Interactive
  focusOffset = 90
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GEVI_screening\GEVI Select Folder.jnl"
Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "E:\Metamorph\Journals\GEVI_screening\Empty Plate Holder Aligned.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "D:\MetaMorph\DATA\Empty Plate Holder Aligned.STG"
MDA - Load Stage List Interactive
  stFileName = "D:\MetaMorph\Data\ONESHOT-CELLS.STG"
Select Magnification
  stSetting = "40X"
MDA - Load State
  stFileName = "E:\Metamorph\MDA_State\GEVI_screening\GEVI Main.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GEVI_screening\GEVI Focus Savelist.jnl"

