Journal
Description: Assign variables directly instead of prompts. These values don't change often, if ever.
Version VersionNumber=2.4
Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "E:\_dataToday" Override=None OverrideVariable=Select Directory
IfThenElse Expression=SelectDirectory.Success = 1
  CodeBlock Condition=true
    StreamSavePath = SelectDirectory.Path
  CodeBlock Condition=false
    StreamSavePath = MDA.Path

Enter Variable
  stVariableName = "Plate_Name"
  nDialogType = 4
  stDialogTitle = "Plate Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Plate Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1
IfThenElse Expression=Len(Plate_Name) = 0
  CodeBlock Condition=true
    ExitPlayback


Solution = "NGHKCM-1"
Drug_Mix = "CNQXCPPGABAZINEMCPG"
Volume = "500ul"
Stim_Volts = "40V"
LED_Setting = "blueLED15"
Trial_No = "t1"

