Journal
Description: iterates for every well
  called by MDA
  IK 11-8-18
Version VersionNumber=2.4

CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName

Trace Expression="NEW WELL POSITION"

Trace Expression="hardware focus"
AFStageLabel = MDA.Status.StagePosName
Start Continuous Focusing
  m_dpRange = 500
Stop Continuous Focusing
Trace Expression="hardware Focus Complete"
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+FocusOffset

Comment: ACTUATOR DOWN!
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\Actuator DOWN.jnl"
Trace Expression="Actuator DOWN"

Comment: software autofocus (added 8/8/20)
Disabled Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\softwareFocus.jnl"

CurrentVoltageName = "flash"
CurrentMDAImage = image.filepath

Comment: ===5AP pre===
CurrentVoltageName = "5AP-recovety"
CurrentMDAImage = image.filepath
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\Axonal_Silencing\AxSi-acquire.jnl"
Delay
  dpDelayTime = 1
  nDelayUnits = 2

Comment: ===red exposure===
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Axsi-Red-NoTrig-Open"
Disabled Delay
  dpDelayTime = 2 Override=Variable OverrideVariable=redTime
  nDelayUnits = 2
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP-noTrig"
Disabled Delay
  dpDelayTime = 15
  nDelayUnits = 2


Comment: ===5AP post===
Disabled CurrentVoltageName = "5AP-POSTstim"
Disabled CurrentMDAImage = image.filepath
Disabled Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\Axonal_Silencing\AxSi-acquire.jnl"
Disabled Delay
  dpDelayTime = 1
  nDelayUnits = 2

Comment: ===GFP ref image===
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\Axonal_Silencing\AxSi-YFP-ref.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP-noTrig" Override=None OverrideVariable=Setting Name
Configure Stream Acquisition
  nStreamFrames = 4
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "-GFP_Ref.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: ===red ref===
CurrentVoltageName = "red"
CurrentMDAImage = image.filepath
Trace Expression="getting red ref image then exposing to red light for determined duration" + str(redTime)
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Axsi-Red-NoTrig"
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\Axonal_Silencing\AxSi-Red-ref.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Configure Stream Acquisition
  nStreamFrames = 4
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "-red_Ref.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\ActuatorUP.jnl"
Trace Expression="Actuator UP"

