Journal
Description: Modified GETI screen to work with iGluSNFR
Version VersionNumber=2.4
Comment: Updated 20200827 to work with Orca Fusion camera
  Updated 20210311 to do axonal silencing
Comment: number of frames to acquire
  400 frames @ 100Hz = 4 seconds
  120 frames @ 33.33ms exposure = 4 seconds
  60 frames @ 30Hz = 2 seconds
Trace Expression="begin main"
numFrames = 60
Assign Variable Interactive
  sweepNum = 1
Disabled sweepNum = 1
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Camera / Board
  stDeviceName = "Hamamatsu DCAM Camera"
  stCameraName = "Hamamatsu DCAM Camera"
Select Magnification
  stSetting = "20x"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\ActuatorUP.jnl"

Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
MDA - Load Stage List Interactive
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
Enter Variable
  stVariableName = "redTime"
  nDialogType = 4
  stDialogTitle = "560nm pulse duration"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "enter time in seconds (2, 0.5, 0.2, 0)"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1
Disabled Assign Variable Interactive
  redTime = 2
Assign Variable
  focusOffset = 110.87
Disabled Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GETI_screening\Select_Folder_IK.jnl"
Select Directory
  stTitle = "Stream Destination"
  stPrompt = "Stream Folder"
  stSelectDirectory = "G:\" Override=None OverrideVariable=Select Directory
StreamSavePath = SelectDirectory.Path
Enter Variable
  stVariableName = "Plate_Name"
  nDialogType = 4
  stDialogTitle = "Plate Name"
  bEnforceMinMax = FALSE
  dpMin = 0
  dpMax = 100
  dpStepSize = 1
  stDialogPrompt = "Please Enter Plate Name"
  stDialogList = "sgwegeher\nfjrtj\ngyityi\n"
  bReturnText = FALSE
  xMessageBox = -1
  yMessageBox = -1
Comment: Execute MDA - this will run timeseries_inner_v2.jnl
Trace Expression="all setup - starting MDA now"
MDA - Load State
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\Axonal_Silencing\Glu_MDA_AxSi.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Disabled Open Data Log
  bOpenFile = TRUE
  bOpenDDE = FALSE
  stOpenFile = "D:\MetaMorph\Data\today\ilya\testlogs\test.LOG" Override=Variable OverrideVariable=StreamSavePath + "\datalog.LOG"
  nOpenFileMode = 0 Override=None OverrideVariable=File Mode
  stDDEContext = "" Override=None OverrideVariable=DDE Context
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled

Comment: Save positions and move to A06 for next plate
Disabled Trace Expression="move for next plate"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"
Disabled Move to an Absolute Position
  pos = 0
Disabled Move Stage to Absolute Position
  dpX = -52795
  dpY = -5728
  dpZ = 8577
Disabled Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+FocusOffset

