Journal
Description: Setup MDA for One Button Acquisition
Version VersionNumber=2.4
Comment: Move the Mirror to the Camera Position if it not there already (if it is there already it will switch back and then forth).
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Binocular"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"

Comment: Select Correct Camera
Select Camera / Board
  stDeviceName = "Andor Camera"
  stCameraName = "Andor Camera"

Comment: Select Correct Objective
Select Magnification
  stSetting = "10X NA0.4"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator UP"
Trace Expression="Actuator UP"
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 2
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line2 DIO recieved"
Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

Comment: Reset Origin each time so that relative positions are maintained
Disabled Go To Origin
Disabled Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Move stage to Absolute Origin"
  stMessage = "Manually Move stage to Absolute Origin \n\nCheck Above the X and Y values\n\nIf they are less than 50 press Continue.\n\nIf not, Cancel & Manually open Devices, Stage, Move stage to Absolute Position and reset Origin."
  msgX = 1517
  msgY = 77
Disabled Reset Stage Origin
  bUpdatePoints = FALSE
Disabled Move Stage to Relative Position
  dpX = -7549
  dpY = -10000
  dpZ = 6010

Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
MDA - Load Stage List Interactive
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
MDA - Load State
  stFileName = "C:\MetaMorph\MDA_State\GETI_screening\ref_autofocus_single.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 3
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled
Disabled Select Magnification
  stSetting = "40X"
Disabled MDA - Load Stage List
  stFileName = "D:\MetaMorph\Data\ONESHOT.STG"
Disabled MDA - Load Stage List
  stFileName = "D:\MetaMorph\Data\ONESHOTbeads.STG"
Disabled MDA - Load State
  stFileName = "D:\MetaMorph\MDA_State\GETI_screening\ref_loop.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Disabled Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled

