Journal
Description: Capture a video stream
  5.5ms exposure
  798 frames (as defined in timeseries_main.jnl) gives us one 2gb file
Version VersionNumber=2.4
numFrames = 3000
StreamSavePath = "E:\_dataToday\20210316_GluSnFR_minis_raw\P1a-20210301_GluSnFR_minis"
Plate_Name = "P1a-20210301"



Trace Expression="new acquisition!" + CurrentVoltageName
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\minis_40x_100Hz_30s\minis_acq_standalone.AST" Override=None OverrideVariable=File Name
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "GFP-noTrig"
Comment: Use CURRENT shutter for stream (set above)
Configure Stream Acquisition
  nStreamFrames = 3000 Override=Variable OverrideVariable=numFrames
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif" Override=None OverrideVariable=Filename
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = FALSE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0

Comment: Need this delay -- otherwise sometimes trigger doesn't register
Delay
  dpDelayTime = 1
  nDelayUnits = 2

Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_30s.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 7 9 0 1 5 0 8 Untitled
  nParm = 0
Disabled Save As
  imSave = m 1 7 9 0 1 5 0 8 Untitled
  fSpec = "E:\_dataToday\hcimage\20200827_ruler\test5.tif"
  nParm = 0
  m_formatID = 336
Close
  im = m 1 7 9 0 1 5 0 8 Untitled
  bSaveIt = FALSE

Comment: switch back to ref to make it easier to find cells
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\yGluSnFR-Orca-refImage.AST" Override=None OverrideVariable=File Name
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE

