Journal
Description: Modified GETI screen to work with iGluSNFR
Version VersionNumber=2.4
Comment: Updated 20200827 to work with Orca Fusion camera
  Updated 20210311 to do axonal silencing
Comment: number of frames to acquire
  400 frames @ 100Hz = 4 seconds
Trace Expression="begin main"
numFrames = 3000
sweepNum = 1
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Camera Port Side"
Select Camera / Board
  stDeviceName = "Hamamatsu DCAM Camera"
  stCameraName = "Hamamatsu DCAM Camera"
Select Magnification
  stSetting = "40x 0.9 NA"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\ActuatorUP.jnl"

Comment: Load in the list of stage positions to image and construct names
Load Memory List
  stFilename = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG" Override=None OverrideVariable=File Name
MDA - Load Stage List
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
MDA - Load Stage List Interactive
  stFileName = "C:\Users\GECI\Desktop\Neuron Position Lists\iGABASnFR_20190225\P9a-20190211_CenterPositions.STG"
Disabled Assign Variable Interactive
  focusOffset = 62
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\GETI_screening\Select_Folder_IK.jnl"
Comment: Execute MDA - this will run timeseries_inner_v2.jnl
Trace Expression="all setup - starting MDA now"
MDA - Load State
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\minis_40x_100Hz_30s\minis_MDA.MDS"
  bImageSizes = TRUE
  bDimensions = TRUE
  bFile = TRUE
  bTimelapse = TRUE
  bStage = FALSE
  bIllum = TRUE
  bExposure = TRUE
  bWaveZ = TRUE
  idxZSeries = 1
  bStreamDimensions = TRUE
  bStreamExposure = TRUE
  bStreamIllum = TRUE
  bStreamMode = TRUE
  bIllumConfig = FALSE
  bJournals = TRUE
Open Data Log
  bOpenFile = TRUE
  bOpenDDE = FALSE
  stOpenFile = "D:\MetaMorph\Data\today\ilya\testlogs\test.LOG" Override=Variable OverrideVariable=StreamSavePath + "\datalog.LOG"
  nOpenFileMode = 0 Override=None OverrideVariable=File Mode
  stDDEContext = "" Override=None OverrideVariable=DDE Context
Multi Dimensional Acquisition
  imDest = m 1 2 9 2 1 -1 -1 8 Untitled

Comment: Save positions and move to A06 for next plate
Trace Expression="move for next plate"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"
Move to an Absolute Position
  pos = 0
Move Stage to Absolute Position
  dpX = -52795
  dpY = -5728
  dpZ = 8577
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+FocusOffset

