Journal
Description: 2-step software focus (coarse and fine)
Version VersionNumber=2.4
Trace Expression="Start Software Focus"
Comment: this illumination setting keeps the shutter open as autofocus is performed
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Glu-noTrig-noShutter"

Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Adjust Focus
  nSteps = 10
  dStepSize = 2
  bDisplayImages = FALSE
  bBacklashCompensation = TRUE
  idxAlgorithm = 1
Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Adjust Focus
  nSteps = 5
  dStepSize = 1
  bDisplayImages = FALSE
  bBacklashCompensation = TRUE
  idxAlgorithm = 1
Delay
  dpDelayTime = 0.5
  nDelayUnits = 2
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Glu-noTrig"
Trace Expression="software Focus Complete"
Trace Expression=Device.Focus.CurPos
