Journal
Description: iterates for every well
  called by MDA
  IK 11-8-18
Version VersionNumber=2.4

CurrentMDAImage = image.filepath
AFStageLabel = MDA.Status.StagePosName

Trace Expression="NEW WELL POSITION"

Trace Expression="Start Focus"
AFStageLabel = MDA.Status.StagePosName
Start Continuous Focusing
  m_dpRange = 500
Stop Continuous Focusing
Trace Expression="Focus Complete"
Trace Expression=Device.Focus.CurPos
Assign Variable
  Device.Focus.CurPos = Device.Focus.CurPos+FocusOffset

Comment: Find best position to stim
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Glu-noTrig" Override=None OverrideVariable=Setting Name
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Glu_screening\testPosAndMoveToBest.jnl"
Delay
  dpDelayTime = 1.5
  nDelayUnits = 2
Log Stage Position

Comment: ACTUATOR DOWN!
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator DOWN"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Actuator DOWN.jnl"
Trace Expression="Actuator DOWN"
Disabled Select Digital I/O Device
  stNewDev = "Wait Lines"
  stGUID = ""
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 1
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line1 DIO recieved"
Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

CurrentVoltageName = "flash"
CurrentMDAImage = image.filepath
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Glu_screening\acq_timeseries_dark.jnl"
Comment: sequence: 1, 3, 10, 40, GFP_ref, BF_ref
Comment: ===1AP===
CurrentVoltageName = "1AP"
CurrentMDAImage = image.filepath
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Glu_screening\acq_timeseries.jnl"
Comment: ===3AP===
Disabled CurrentVoltageName = "3AP"
Disabled CurrentMDAImage = image.filepath
Disabled Run Journal
  stExecuteJournal = "D:\MetaMorph\Journals\GETI_screening\acq_timeseries.jnl"
Comment: ===10AP===
CurrentVoltageName = "10AP"
CurrentMDAImage = image.filepath
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Glu_screening\acq_timeseries.jnl"
Comment: ===20AP===
CurrentVoltageName = "20AP"
CurrentMDAImage = image.filepath
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Glu_screening\acq_timeseries.jnl"
Comment: ===40AP===
CurrentVoltageName = "40AP"
CurrentMDAImage = image.filepath
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\Glu_screening\acq_timeseries.jnl"

Comment: Make the Stimulator Actuator to Raise and Wait for Confirmation of Raise
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator UP"
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"
Trace Expression="Actuator UP"
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 2
  dwSetState2 = 0
  dwState2 = 0
Disabled Trace Expression="Line2 DIO recieved"
Delay
  dpDelayTime = 1.5
  nDelayUnits = 2

Comment: GFP ref image
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\GETI screening\iGABAsnfr-refImage.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Glu-noTrig" Override=None OverrideVariable=Setting Name
Configure Stream Acquisition
  nStreamFrames = 4
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_GFP.tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Comment: Memorize reference image location
Disabled Memorize Absolute Position
  stDescription = "AFStageLabel" Override=Variable OverrideVariable=NewStreamName
  nThisCategory = 1

Comment: BF ref image -- OFF
Disabled Image.FilePath = NewStreamName
Disabled Acquire - Load Setting
  stFileName = "D:\MetaMorph\ACQSTATE\Analog-GFP-Focus-Ilya.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "brightfield"
Disabled Configure Stream Acquisition
  nStreamFrames = 4
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Disabled Stream Acquisition
  imNew = "Stream Acquisition"
Disabled NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + AFStageLabel + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + "_BF.tif"
Disabled Trace Expression=NewStreamName
Disabled Image.FilePath = NewStreamName
Disabled Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Disabled Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE



