Journal
Description: Find focus offset from 1 representative well for HEK-NK cells in PerkinElmer CellCarrier plate
Version VersionNumber=2.4
Comment: raise actuator and wait for confirmation
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Actuator UP"
Disabled Wait for Digital I/O
  cMillisec = 1000000000
  dwSetState = 3
  dwState = 2
  dwSetState2 = 0
  dwState2 = 0
Trace Expression="Actuator UP confirmed"

Move Stage to Absolute Position
  dpX = -52795
  dpY = -5728
  dpZ = 8500

Comment: 20180620 - flip to GFP cube for focus offset
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Arc1.0-GABA_noTrig"
Disabled Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Berst2.0"
Acquire - Load Setting
  stFileName = "E:\Metamorph\ACQSTATE\GETI screening\iGABAsnfr-refImage.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Acquire - Start Live
Go to Focus
  m_dpRange = 500
Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Focus image"
  stMessage = "Focus image\n\nThen press Continue\n\nTo stop, press Cancel"
  msgX = 521
  msgY = 886
Acquire - Stop Live
Set Focus
  m_dpRange = 500

