Journal
Description: Find focus offset in well C6
Version VersionNumber=2.4
Comment: raise actuator and wait for confirmation
Run Journal
  stExecuteJournal = "E:\Metamorph\Journals\ActuatorUP.jnl"

Move Stage to Absolute Position
  dpX = -52795
  dpY = -23728
  dpZ = 8500

Comment: glu
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Glu-noTrig"
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\yGluSnFR-Orca-refImage.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Acquire - Start Live
Go to Focus
  m_dpRange = 500
Show Message and Wait
  nDisplay = 3
  iTimeout = 30
  bUseTimeout = FALSE
  stTitle = "Focus image"
  stMessage = "Focus image\n\nThen press Continue\n\nTo stop, press Cancel"
  msgX = 521
  msgY = 886
Acquire - Stop Live
Set Focus
  m_dpRange = 500

