Journal
Description: switch magnification and focus to find the electrode
Version VersionNumber=2.4
StreamSavePath = "E:\_dataToday\calibration\Electrode_Pictures"
Plate_Name = "Electrode-Check"
Assign Variable
  Year = GetYearPartFromString(GetDateTime()) 
Assign Variable
  Month = GetMonthPartFromString(GetDateTime()) 
Assign Variable
  Day = GetDayPartFromString(GetDateTime()) 
YMD = str(Year) + "." + str(Month) + "." + str(Day)
Disabled Trace Expression=YMD

Comment: raise actuator and wait for confirmation
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\ActuatorUP.jnl"
Select Magnification
  stSetting = "4X objective"

Move to an Absolute Position
  pos = 0
Move Stage to Absolute Position
  dpX = -52795
  dpY = -5728
  dpZ = 9350
Select Illumination
  bUseLegacyDelay = FALSE
  cMillisecDelay = 100
  stSetting = "Glu-noTrig"
Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\Actuator DOWN.jnl"

Comment: ref image
Acquire - Load Setting
  stFileName = "E:\GitHub\MetaMorph\Rig-2\Glu_screening\yGluSnFR-Orca-refImage.AST"
  bLdExposure = TRUE
  bLdBinning = TRUE
  bLdRegion = TRUE
  bLdShutter = FALSE
  bLdDest = TRUE
  bLdDisplay = TRUE
  bLdSaving = TRUE
  bLdCorrection = TRUE
  bLdCorrImages = TRUE
  bLdAnnotation = TRUE
  bLdSpecial = TRUE
  bLdColor = TRUE
  bLdLiveCapture = TRUE
  bLdHardwareProcessing = TRUE
  bLdDeconvolution = FALSE
  bLdVirtualChip = FALSE
  bLdCrestVcs = FALSE
  bLdSplitView = FALSE
Configure Stream Acquisition
  nStreamFrames = 1
  nStreamFramesSkip = 0
  nStreamResMode = 1
  nAcqMode = 1
  nStreamState = 1
  nStreamShutter = 1
  nStreamClear = 1
  nStreamToHardDisk = 1
  bStreamRunUserPrograms = FALSE
  stProgramNameForAcquire = ""
  bStreamFrameRate = FALSE
  dpStreamFrameRate = 1
  bStreamUsesFocusMotor = FALSE
  nStreamStartAt = 3
  nStreamMoveTo = 3
  nStreamAfter = 1
  bStreamUsesIllum = FALSE
  cStreamWavelengths = 1
  stIllumination = "" "" "" ""
  stShutterName = "[Current Shutter]"
  stDiskFilename = "D:\Stream Acquisition\Stream Test.tif"
  bOverwriteFile = FALSE
  nStreamFramesToAverage = 1
  bPreviewShow = TRUE
  cPreviewFrameInterval = 1
  nDualState = 1
  bSaveDuringAcquire = FALSE
  bSaveOneImagePerFile = TRUE
  bStreamUsesSpecificMoves = FALSE
  cSpecificItems = 3
  aiSpecStartFrame = 1 1 1
  aiSpecFrequency = 10 10 10
  aiSpecNumber = 1 1 1
  astSpecComponent = "BlueLED" "Olympus Filter Cube" "Olympus Excitation"
  adSpecPosition = -1 3 3
  aiSpecPin = 0 0 0
Stream Acquisition
  imNew = "Stream Acquisition"
NewStreamName = StreamSavePath + "\" + Plate_Name + "_" + YMD + "_X" + STR(Device.Stage.XPosition) + "_Y" + STR(Device.Stage.YPosition) + "_Z" + STR(Device.Focus.CurPos) + ".tif"
Trace Expression=NewStreamName
Image.FilePath = NewStreamName
Save
  imSave = m 1 3 9 0 1 -1 -1 8 Untitled
  nParm = 0
Close
  im = m 1 3 9 0 1 -1 -1 8 Untitled
  bSaveIt = FALSE

Run Journal
  stExecuteJournal = "E:\GitHub\MetaMorph\Rig-2\ActuatorUP.jnl"

